WorkflowBuilder(Version=2.2.2)
Bonsai.Vision.FileCapture => #0
  FileName="Z:\D R E O S T I   L A B\Hande\Behaviours\Drugs\Drug1_Buspirone.HCl\Pilot\Pilot_2\Stock_20083\2019_02_26\SetupC\Fish5_23dpf-20uM\Drugged\Drugged.avi"
  PlaybackRate=10000
  StartPosition=0
  PositionUnits=Frames
  Loop=false
  Playing=true
-> NestedWorkflow Roi6
    WorkflowInput Source1 => #29
    ExternalizedPropertyOfRectCrop RegionOfInterest(MemberName=RegionOfInterest, Value(X=305, Y=255, Width=207, Height=194)) => #30
    #29, #30 -> Bonsai.Vision.Crop(RegionOfInterest(X=305, Y=255, Width=207, Height=194))
    -> Bonsai.Vision.Grayscale => #27
    -> Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=1, AdaptationRate=1, ThresholdValue=10, ThresholdType=Binary, SubtractionMethod=Absolute)
    -> Bonsai.Dsp.Sum
    -> MemberSelector(Selector=Source.Val0) => #12
    #27 -> Bonsai.Vision.MaskPolygon
      Regions
        ArrayOfPoint
          Point(X=33, Y=109)
          Point(X=36, Y=89)
          Point(X=42, Y=72)
          Point(X=55, Y=52)
          Point(X=73, Y=35)
          Point(X=93, Y=28)
          Point(X=113, Y=25)
          Point(X=137, Y=23)
          Point(X=157, Y=33)
          Point(X=171, Y=50)
          Point(X=183, Y=69)
          Point(X=189, Y=101)
          Point(X=185, Y=127)
          Point(X=172, Y=151)
          Point(X=153, Y=168)
          Point(X=133, Y=179)
          Point(X=115, Y=185)
          Point(X=93, Y=186)
          Point(X=73, Y=180)
          Point(X=55, Y=164)
          Point(X=43, Y=144)
          Point(X=36, Y=127)
      MaskType=ToZero
      FillValue(Val0=255, Val1=255, Val2=255, Val3=255)
    -> Bonsai.Vision.Threshold(ThresholdValue=138, MaxValue=255, ThresholdType=BinaryInv) => #22
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Bonsai.Vision.LargestBinaryRegion
    -> MemberSelector(Selector=Source.Centroid)
    -> NestedWorkflow VelocityVector
        WorkflowInput Source1 => #3
        -> Skip(Count=1) => #2
        #2, #3 -> Zip
        -> Subtract
        -> WorkflowOutput
    -> Bonsai.Scripting.PythonTransform
      Script:
        import math

        @returns(float)
        def process(value):
          return math.sqrt(value.X*value.X+value.Y*value.Y)
    #27 -> Bonsai.Dsp.ConvertScale(Depth=F32, Scale=1, Shift=0)
    -> Bonsai.Dsp.IncrementalMean
    -> Bonsai.Vision.Threshold(ThresholdValue=138, MaxValue=255, ThresholdType=BinaryInv) => #23
    #22, #23 -> Zip
    -> Subtract
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=100, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Bonsai.Vision.LargestBinaryRegion
    -> MemberSelector(Selector=Source.Centroid)
    -> NestedWorkflow VelocityVector
        WorkflowInput Source1 => #3
        -> Skip(Count=1) => #2
        #2, #3 -> Zip
        -> Subtract
        -> WorkflowOutput
    -> Bonsai.Scripting.PythonTransform => #5
      Script:
        import math

        @returns(float)
        def process(value):
          return math.sqrt(value.X*value.X+value.Y*value.Y)
    ExternalizedPropertyOfStringCsvWriter BoutFileName(MemberName=FileName, Value=bouts.csv) => #31
    #12, #31 -> Bonsai.IO.CsvWriter(FileName=bouts.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
    -> Accumulate
    -> Last => #3
    ExternalizedPropertyOfStringCsvWriter TotalMovementFileName(MemberName=FileName, Value=totalmovement.csv) => #32
    #3, #32 -> Bonsai.IO.CsvWriter(FileName=totalmovement.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
    ExternalizedPropertyOfStringCsvWriter TravelSpeedFileName(MemberName=FileName, Value=travelspeed.csv) => #33
    #5, #33 -> Bonsai.IO.CsvWriter(FileName=travelspeed.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#0 -> NestedWorkflow Roi1
    WorkflowInput Source1 => #29
    ExternalizedPropertyOfRectCrop RegionOfInterest(MemberName=RegionOfInterest, Value(X=305, Y=255, Width=207, Height=194)) => #30
    #29, #30 -> Bonsai.Vision.Crop(RegionOfInterest(X=305, Y=255, Width=207, Height=194))
    -> Bonsai.Vision.Grayscale => #27
    -> Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=1, AdaptationRate=1, ThresholdValue=10, ThresholdType=Binary, SubtractionMethod=Absolute)
    -> Bonsai.Dsp.Sum
    -> MemberSelector(Selector=Source.Val0) => #12
    #27 -> Bonsai.Vision.MaskPolygon
      Regions
        ArrayOfPoint
          Point(X=33, Y=109)
          Point(X=36, Y=89)
          Point(X=42, Y=72)
          Point(X=55, Y=52)
          Point(X=73, Y=35)
          Point(X=93, Y=28)
          Point(X=113, Y=25)
          Point(X=137, Y=23)
          Point(X=157, Y=33)
          Point(X=171, Y=50)
          Point(X=183, Y=69)
          Point(X=189, Y=101)
          Point(X=185, Y=127)
          Point(X=172, Y=151)
          Point(X=153, Y=168)
          Point(X=133, Y=179)
          Point(X=115, Y=185)
          Point(X=93, Y=186)
          Point(X=73, Y=180)
          Point(X=55, Y=164)
          Point(X=43, Y=144)
          Point(X=36, Y=127)
      MaskType=ToZero
      FillValue(Val0=255, Val1=255, Val2=255, Val3=255)
    -> Bonsai.Vision.Threshold(ThresholdValue=138, MaxValue=255, ThresholdType=BinaryInv) => #22
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Bonsai.Vision.LargestBinaryRegion
    -> MemberSelector(Selector=Source.Centroid)
    -> NestedWorkflow VelocityVector
        WorkflowInput Source1 => #3
        -> Skip(Count=1) => #2
        #2, #3 -> Zip
        -> Subtract
        -> WorkflowOutput
    -> Bonsai.Scripting.PythonTransform
      Script:
        import math

        @returns(float)
        def process(value):
          return math.sqrt(value.X*value.X+value.Y*value.Y)
    #27 -> Bonsai.Dsp.ConvertScale(Depth=F32, Scale=1, Shift=0)
    -> Bonsai.Dsp.IncrementalMean
    -> Bonsai.Vision.Threshold(ThresholdValue=138, MaxValue=255, ThresholdType=BinaryInv) => #23
    #22, #23 -> Zip
    -> Subtract
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=100, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Bonsai.Vision.LargestBinaryRegion
    -> MemberSelector(Selector=Source.Centroid)
    -> NestedWorkflow VelocityVector
        WorkflowInput Source1 => #3
        -> Skip(Count=1) => #2
        #2, #3 -> Zip
        -> Subtract
        -> WorkflowOutput
    -> Bonsai.Scripting.PythonTransform => #5
      Script:
        import math

        @returns(float)
        def process(value):
          return math.sqrt(value.X*value.X+value.Y*value.Y)
    ExternalizedPropertyOfStringCsvWriter BoutFileName(MemberName=FileName, Value=bouts.csv) => #31
    #12, #31 -> Bonsai.IO.CsvWriter(FileName=bouts.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
    -> Accumulate
    -> Last => #3
    ExternalizedPropertyOfStringCsvWriter TotalMovementFileName(MemberName=FileName, Value=totalmovement.csv) => #32
    #3, #32 -> Bonsai.IO.CsvWriter(FileName=totalmovement.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
    ExternalizedPropertyOfStringCsvWriter TravelSpeedFileName(MemberName=FileName, Value=travelspeed.csv) => #33
    #5, #33 -> Bonsai.IO.CsvWriter(FileName=travelspeed.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#0 -> NestedWorkflow Roi3
    WorkflowInput Source1 => #29
    ExternalizedPropertyOfRectCrop RegionOfInterest(MemberName=RegionOfInterest, Value(X=305, Y=255, Width=207, Height=194)) => #30
    #29, #30 -> Bonsai.Vision.Crop(RegionOfInterest(X=305, Y=255, Width=207, Height=194))
    -> Bonsai.Vision.Grayscale => #27
    -> Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=1, AdaptationRate=1, ThresholdValue=10, ThresholdType=Binary, SubtractionMethod=Absolute)
    -> Bonsai.Dsp.Sum
    -> MemberSelector(Selector=Source.Val0) => #12
    #27 -> Bonsai.Vision.MaskPolygon
      Regions
        ArrayOfPoint
          Point(X=33, Y=109)
          Point(X=36, Y=89)
          Point(X=42, Y=72)
          Point(X=55, Y=52)
          Point(X=73, Y=35)
          Point(X=93, Y=28)
          Point(X=113, Y=25)
          Point(X=137, Y=23)
          Point(X=157, Y=33)
          Point(X=171, Y=50)
          Point(X=183, Y=69)
          Point(X=189, Y=101)
          Point(X=185, Y=127)
          Point(X=172, Y=151)
          Point(X=153, Y=168)
          Point(X=133, Y=179)
          Point(X=115, Y=185)
          Point(X=93, Y=186)
          Point(X=73, Y=180)
          Point(X=55, Y=164)
          Point(X=43, Y=144)
          Point(X=36, Y=127)
      MaskType=ToZero
      FillValue(Val0=255, Val1=255, Val2=255, Val3=255)
    -> Bonsai.Vision.Threshold(ThresholdValue=138, MaxValue=255, ThresholdType=BinaryInv) => #22
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Bonsai.Vision.LargestBinaryRegion
    -> MemberSelector(Selector=Source.Centroid)
    -> NestedWorkflow VelocityVector
        WorkflowInput Source1 => #3
        -> Skip(Count=1) => #2
        #2, #3 -> Zip
        -> Subtract
        -> WorkflowOutput
    -> Bonsai.Scripting.PythonTransform
      Script:
        import math

        @returns(float)
        def process(value):
          return math.sqrt(value.X*value.X+value.Y*value.Y)
    #27 -> Bonsai.Dsp.ConvertScale(Depth=F32, Scale=1, Shift=0)
    -> Bonsai.Dsp.IncrementalMean
    -> Bonsai.Vision.Threshold(ThresholdValue=138, MaxValue=255, ThresholdType=BinaryInv) => #23
    #22, #23 -> Zip
    -> Subtract
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=100, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Bonsai.Vision.LargestBinaryRegion
    -> MemberSelector(Selector=Source.Centroid)
    -> NestedWorkflow VelocityVector
        WorkflowInput Source1 => #3
        -> Skip(Count=1) => #2
        #2, #3 -> Zip
        -> Subtract
        -> WorkflowOutput
    -> Bonsai.Scripting.PythonTransform => #5
      Script:
        import math

        @returns(float)
        def process(value):
          return math.sqrt(value.X*value.X+value.Y*value.Y)
    ExternalizedPropertyOfStringCsvWriter BoutFileName(MemberName=FileName, Value=bouts.csv) => #31
    #12, #31 -> Bonsai.IO.CsvWriter(FileName=bouts.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
    -> Accumulate
    -> Last => #3
    ExternalizedPropertyOfStringCsvWriter TotalMovementFileName(MemberName=FileName, Value=totalmovement.csv) => #32
    #3, #32 -> Bonsai.IO.CsvWriter(FileName=totalmovement.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
    ExternalizedPropertyOfStringCsvWriter TravelSpeedFileName(MemberName=FileName, Value=travelspeed.csv) => #33
    #5, #33 -> Bonsai.IO.CsvWriter(FileName=travelspeed.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#0 -> NestedWorkflow Roi5
    WorkflowInput Source1 => #29
    ExternalizedPropertyOfRectCrop RegionOfInterest(MemberName=RegionOfInterest, Value(X=305, Y=255, Width=207, Height=194)) => #30
    #29, #30 -> Bonsai.Vision.Crop(RegionOfInterest(X=305, Y=255, Width=207, Height=194))
    -> Bonsai.Vision.Grayscale => #27
    -> Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=1, AdaptationRate=1, ThresholdValue=10, ThresholdType=Binary, SubtractionMethod=Absolute)
    -> Bonsai.Dsp.Sum
    -> MemberSelector(Selector=Source.Val0) => #12
    #27 -> Bonsai.Vision.MaskPolygon
      Regions
        ArrayOfPoint
          Point(X=33, Y=109)
          Point(X=36, Y=89)
          Point(X=42, Y=72)
          Point(X=55, Y=52)
          Point(X=73, Y=35)
          Point(X=93, Y=28)
          Point(X=113, Y=25)
          Point(X=137, Y=23)
          Point(X=157, Y=33)
          Point(X=171, Y=50)
          Point(X=183, Y=69)
          Point(X=189, Y=101)
          Point(X=185, Y=127)
          Point(X=172, Y=151)
          Point(X=153, Y=168)
          Point(X=133, Y=179)
          Point(X=115, Y=185)
          Point(X=93, Y=186)
          Point(X=73, Y=180)
          Point(X=55, Y=164)
          Point(X=43, Y=144)
          Point(X=36, Y=127)
      MaskType=ToZero
      FillValue(Val0=255, Val1=255, Val2=255, Val3=255)
    -> Bonsai.Vision.Threshold(ThresholdValue=138, MaxValue=255, ThresholdType=BinaryInv) => #22
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Bonsai.Vision.LargestBinaryRegion
    -> MemberSelector(Selector=Source.Centroid)
    -> NestedWorkflow VelocityVector
        WorkflowInput Source1 => #3
        -> Skip(Count=1) => #2
        #2, #3 -> Zip
        -> Subtract
        -> WorkflowOutput
    -> Bonsai.Scripting.PythonTransform
      Script:
        import math

        @returns(float)
        def process(value):
          return math.sqrt(value.X*value.X+value.Y*value.Y)
    #27 -> Bonsai.Dsp.ConvertScale(Depth=F32, Scale=1, Shift=0)
    -> Bonsai.Dsp.IncrementalMean
    -> Bonsai.Vision.Threshold(ThresholdValue=138, MaxValue=255, ThresholdType=BinaryInv) => #23
    #22, #23 -> Zip
    -> Subtract
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=100, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Bonsai.Vision.LargestBinaryRegion
    -> MemberSelector(Selector=Source.Centroid)
    -> NestedWorkflow VelocityVector
        WorkflowInput Source1 => #3
        -> Skip(Count=1) => #2
        #2, #3 -> Zip
        -> Subtract
        -> WorkflowOutput
    -> Bonsai.Scripting.PythonTransform => #5
      Script:
        import math

        @returns(float)
        def process(value):
          return math.sqrt(value.X*value.X+value.Y*value.Y)
    ExternalizedPropertyOfStringCsvWriter BoutFileName(MemberName=FileName, Value=bouts.csv) => #31
    #12, #31 -> Bonsai.IO.CsvWriter(FileName=bouts.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
    -> Accumulate
    -> Last => #3
    ExternalizedPropertyOfStringCsvWriter TotalMovementFileName(MemberName=FileName, Value=totalmovement.csv) => #32
    #3, #32 -> Bonsai.IO.CsvWriter(FileName=totalmovement.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
    ExternalizedPropertyOfStringCsvWriter TravelSpeedFileName(MemberName=FileName, Value=travelspeed.csv) => #33
    #5, #33 -> Bonsai.IO.CsvWriter(FileName=travelspeed.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#0 -> NestedWorkflow Roi2
    WorkflowInput Source1 => #29
    ExternalizedPropertyOfRectCrop RegionOfInterest(MemberName=RegionOfInterest, Value(X=305, Y=255, Width=207, Height=194)) => #30
    #29, #30 -> Bonsai.Vision.Crop(RegionOfInterest(X=305, Y=255, Width=207, Height=194))
    -> Bonsai.Vision.Grayscale => #27
    -> Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=1, AdaptationRate=1, ThresholdValue=10, ThresholdType=Binary, SubtractionMethod=Absolute)
    -> Bonsai.Dsp.Sum
    -> MemberSelector(Selector=Source.Val0) => #12
    #27 -> Bonsai.Vision.MaskPolygon
      Regions
        ArrayOfPoint
          Point(X=33, Y=109)
          Point(X=36, Y=89)
          Point(X=42, Y=72)
          Point(X=55, Y=52)
          Point(X=73, Y=35)
          Point(X=93, Y=28)
          Point(X=113, Y=25)
          Point(X=137, Y=23)
          Point(X=157, Y=33)
          Point(X=171, Y=50)
          Point(X=183, Y=69)
          Point(X=189, Y=101)
          Point(X=185, Y=127)
          Point(X=172, Y=151)
          Point(X=153, Y=168)
          Point(X=133, Y=179)
          Point(X=115, Y=185)
          Point(X=93, Y=186)
          Point(X=73, Y=180)
          Point(X=55, Y=164)
          Point(X=43, Y=144)
          Point(X=36, Y=127)
      MaskType=ToZero
      FillValue(Val0=255, Val1=255, Val2=255, Val3=255)
    -> Bonsai.Vision.Threshold(ThresholdValue=138, MaxValue=255, ThresholdType=BinaryInv) => #22
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Bonsai.Vision.LargestBinaryRegion
    -> MemberSelector(Selector=Source.Centroid)
    -> NestedWorkflow VelocityVector
        WorkflowInput Source1 => #3
        -> Skip(Count=1) => #2
        #2, #3 -> Zip
        -> Subtract
        -> WorkflowOutput
    -> Bonsai.Scripting.PythonTransform
      Script:
        import math

        @returns(float)
        def process(value):
          return math.sqrt(value.X*value.X+value.Y*value.Y)
    #27 -> Bonsai.Dsp.ConvertScale(Depth=F32, Scale=1, Shift=0)
    -> Bonsai.Dsp.IncrementalMean
    -> Bonsai.Vision.Threshold(ThresholdValue=138, MaxValue=255, ThresholdType=BinaryInv) => #23
    #22, #23 -> Zip
    -> Subtract
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=100, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Bonsai.Vision.LargestBinaryRegion
    -> MemberSelector(Selector=Source.Centroid)
    -> NestedWorkflow VelocityVector
        WorkflowInput Source1 => #3
        -> Skip(Count=1) => #2
        #2, #3 -> Zip
        -> Subtract
        -> WorkflowOutput
    -> Bonsai.Scripting.PythonTransform => #5
      Script:
        import math

        @returns(float)
        def process(value):
          return math.sqrt(value.X*value.X+value.Y*value.Y)
    ExternalizedPropertyOfStringCsvWriter BoutFileName(MemberName=FileName, Value=bouts.csv) => #31
    #12, #31 -> Bonsai.IO.CsvWriter(FileName=bouts.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
    -> Accumulate
    -> Last => #3
    ExternalizedPropertyOfStringCsvWriter TotalMovementFileName(MemberName=FileName, Value=totalmovement.csv) => #32
    #3, #32 -> Bonsai.IO.CsvWriter(FileName=totalmovement.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
    ExternalizedPropertyOfStringCsvWriter TravelSpeedFileName(MemberName=FileName, Value=travelspeed.csv) => #33
    #5, #33 -> Bonsai.IO.CsvWriter(FileName=travelspeed.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
#0 -> NestedWorkflow Roi4
    WorkflowInput Source1 => #29
    ExternalizedPropertyOfRectCrop RegionOfInterest(MemberName=RegionOfInterest, Value(X=305, Y=255, Width=207, Height=194)) => #30
    #29, #30 -> Bonsai.Vision.Crop(RegionOfInterest(X=305, Y=255, Width=207, Height=194))
    -> Bonsai.Vision.Grayscale => #27
    -> Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=1, AdaptationRate=1, ThresholdValue=10, ThresholdType=Binary, SubtractionMethod=Absolute)
    -> Bonsai.Dsp.Sum
    -> MemberSelector(Selector=Source.Val0) => #12
    #27 -> Bonsai.Vision.MaskPolygon
      Regions
        ArrayOfPoint
          Point(X=33, Y=109)
          Point(X=36, Y=89)
          Point(X=42, Y=72)
          Point(X=55, Y=52)
          Point(X=73, Y=35)
          Point(X=93, Y=28)
          Point(X=113, Y=25)
          Point(X=137, Y=23)
          Point(X=157, Y=33)
          Point(X=171, Y=50)
          Point(X=183, Y=69)
          Point(X=189, Y=101)
          Point(X=185, Y=127)
          Point(X=172, Y=151)
          Point(X=153, Y=168)
          Point(X=133, Y=179)
          Point(X=115, Y=185)
          Point(X=93, Y=186)
          Point(X=73, Y=180)
          Point(X=55, Y=164)
          Point(X=43, Y=144)
          Point(X=36, Y=127)
      MaskType=ToZero
      FillValue(Val0=255, Val1=255, Val2=255, Val3=255)
    -> Bonsai.Vision.Threshold(ThresholdValue=138, MaxValue=255, ThresholdType=BinaryInv) => #22
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Bonsai.Vision.LargestBinaryRegion
    -> MemberSelector(Selector=Source.Centroid)
    -> NestedWorkflow VelocityVector
        WorkflowInput Source1 => #3
        -> Skip(Count=1) => #2
        #2, #3 -> Zip
        -> Subtract
        -> WorkflowOutput
    -> Bonsai.Scripting.PythonTransform
      Script:
        import math

        @returns(float)
        def process(value):
          return math.sqrt(value.X*value.X+value.Y*value.Y)
    #27 -> Bonsai.Dsp.ConvertScale(Depth=F32, Scale=1, Shift=0)
    -> Bonsai.Dsp.IncrementalMean
    -> Bonsai.Vision.Threshold(ThresholdValue=138, MaxValue=255, ThresholdType=BinaryInv) => #23
    #22, #23 -> Zip
    -> Subtract
    -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=100, MaxArea=nil)
    -> Bonsai.Vision.BinaryRegionAnalysis
    -> Bonsai.Vision.LargestBinaryRegion
    -> MemberSelector(Selector=Source.Centroid)
    -> NestedWorkflow VelocityVector
        WorkflowInput Source1 => #3
        -> Skip(Count=1) => #2
        #2, #3 -> Zip
        -> Subtract
        -> WorkflowOutput
    -> Bonsai.Scripting.PythonTransform => #5
      Script:
        import math

        @returns(float)
        def process(value):
          return math.sqrt(value.X*value.X+value.Y*value.Y)
    ExternalizedPropertyOfStringCsvWriter BoutFileName(MemberName=FileName, Value=bouts.csv) => #31
    #12, #31 -> Bonsai.IO.CsvWriter(FileName=bouts.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
    -> Accumulate
    -> Last => #3
    ExternalizedPropertyOfStringCsvWriter TotalMovementFileName(MemberName=FileName, Value=totalmovement.csv) => #32
    #3, #32 -> Bonsai.IO.CsvWriter(FileName=totalmovement.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
    ExternalizedPropertyOfStringCsvWriter TravelSpeedFileName(MemberName=FileName, Value=travelspeed.csv) => #33
    #5, #33 -> Bonsai.IO.CsvWriter(FileName=travelspeed.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
