<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.3.0">
  <Workflow xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:q1="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns="https://horizongir.org/bonsai">
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:FileCapture">
          <q1:FileName>F:\Isolation_Experiments\Experiment_3\2017_05_15\Isolated_fish\Fish1_25dpf\Social_1\Social_1.avi</q1:FileName>
          <q1:PlaybackRate>20000</q1:PlaybackRate>
          <q1:StartPosition>3000</q1:StartPosition>
          <q1:PositionUnits>Frames</q1:PositionUnits>
          <q1:Loop>false</q1:Loop>
          <q1:Playing>true</q1:Playing>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Index" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Index</Selector>
      </Expression>
      <Expression xsi:type="Condition">
        <Name>StopAfter</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>420</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="ExternalizedPropertyOfInt32EqualBuilder">
              <MemberName>Value</MemberName>
              <Name>NumFrames</Name>
              <Value>104876</Value>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>2</To>
              <Label>Source2</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:VideoWriter">
          <q1:FileName>Final_Movie.avi</q1:FileName>
          <q1:Suffix>None</q1:Suffix>
          <q1:Buffered>true</q1:Buffered>
          <q1:Overwrite>true</q1:Overwrite>
          <q1:FourCC>FMP4</q1:FourCC>
          <q1:FrameRate>100</q1:FrameRate>
          <q1:FrameSize>
            <q1:Width>0</q1:Width>
            <q1:Height>0</q1:Height>
          </q1:FrameSize>
          <q1:ResizeInterpolation>NearestNeighbor</q1:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedPropertyOfDoubleFileCapture">
        <MemberName>StartPosition</MemberName>
        <Name>StartPosition</Name>
        <Value>1</Value>
      </Expression>
    </Nodes>
    <Edges>
      <Edge>
        <From>0</From>
        <To>1</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>0</From>
        <To>4</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>1</From>
        <To>2</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>2</From>
        <To>3</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>3</From>
        <To>4</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>4</From>
        <To>5</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>6</From>
        <To>0</To>
        <Label>Source1</Label>
      </Edge>
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Vision.FileCapture, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Index, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.EqualBuilder, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.IntProperty, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.ExternalizedProperty`2[[System.Int32, mscorlib, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089],[Bonsai.Expressions.EqualBuilder, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null]], Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.TakeUntil, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.VideoWriter, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.ExternalizedProperty`2[[System.Double, mscorlib, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089],[Bonsai.Vision.FileCapture, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null]], Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>